PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Full_PT
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Welcome
    RoutineSettingsComponent Welcome
      desc = Welcome screen
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    TextComponent text_hi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bem-vindo!

        Obrigada por participar nesta experiência.



        Prime ESPAÇO para avançar
    KeyboardComponent key_welcome
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explanation_PAL
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    TextComponent text_Explain_PAL
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vais ver duas imagens :
         uma cena e um objeto.

        DECORA O PAR DE IMAGENS!

         Mais tarde vamos testar se te lembras destes pares de imagens.

        Prime ESPAÇO para avançar
    KeyboardComponent key_start_example
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Start_PAL
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    TextComponent text_end_ex
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Exemplo concluído.
    TextComponent text_start_PAL
      letterHeight = 0.05
      startVal [time (s)] = 1.5
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      text:
        Vamos começar?

        Prime a tecla ESPAÇO quando estiveres pronto
        Se tiveres alguma dúvida chama o experimentador.
    KeyboardComponent key_start_PAL
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine Encode
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    ImageComponent image_scene_encode
      image [set every repeat] = $scene_encode
      pos = (-200, 0)
      size [set every repeat] = scene_size
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_object_encode
      image [set every repeat] = $object_encode
      pos = (300, 0)
      size [set every repeat] = object_size
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_debugPAL
      Code Type = Auto->JS
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      Begin Routine:
        print(f"trial {trial_encode.thisN}, image = {scene_encode}")
        print(f"trial {trial_encode.thisN}, image = {object_encode}")
    TextComponent text_rating
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 2.5
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      text:
        Qual o nível de congruência entre o par?
        1 - Incongruente        5- Congruente
    SliderComponent slider_cong
      font = Ariel
      forceEndRoutine = True
      granularity = 1
      labels = '1','2','3','4','5'
      letterHeight = 0.05
      pos = (0, -0.35)
      size = (0.8, 0.05)
      startVal [time (s)] = 2.5
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine blank
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    PolygonComponent cross_25
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.25
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    ImageComponent image_blank
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
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  Routine Pause_1
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    TextComponent text_pausa1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A primeira parte está concluída. Bom trabalho!

        Prime ESPAÇO quando estiveres pronto para a próxima tarefa.
    KeyboardComponent key_Start_Cog
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explanation_GoNo
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    TextComponent text_explanation_GoNo
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        INSTRUÇÕES:

            círculo VERDE → Primir ESPAÇO
            círculo VERMELHO → NÃO primir nada

            Terá 1 segundo para responder

            Prima ESPAÇO para começar
  Routine Go_No
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    PolygonComponent polygon_Go
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent polygon_line
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Cog_Oral
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    TextComponent text_endGo
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Tarefa concluída.
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    TextComponent text_call
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = O experimentador vem agora ter contigo para duas tarefas orais.
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    KeyboardComponent key_end_cog
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Retomar
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    TextComponent text_retomar
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Pronto para os testes de memória?
        Prime ESPAÇO para a explicação das tarefas.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explanation_Recall
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    TextComponent text_explain_recall
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vamos fazer agora duas tarefas para testar a tua memória.
        Será que te lembras dos pares de imagens?


        Prime ESPAÇO para continuar
    KeyboardComponent key_continue
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Old_New
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    ImageComponent image_old_new
      image [set every repeat] = $old_new_scene
      pos = (0, -0.08)
      size [set every repeat] = size_scene
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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    KeyboardComponent key_item
      allowedKeys = 'v','n','left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      store = all keys
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    TextComponent text_item
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Prime a flecha esquerda '<-' ou 'v' para VELHAS imagens

        Prime a flecha direita '->' ou 'n' para NOVAS imagens
  Routine End_Old_New
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    TextComponent text_end_item
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Tarefa concluída. Só falta mais uma.
        Prime ESPAÇO quando estiveres pronto para a explicação do segundo teste.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_2AFC
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    ImageComponent image_scene_2AFC
      image [set every repeat] = $scene_encode
      pos = (-250, 0)
      size [set every repeat] = scene_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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    KeyboardComponent key_2AFC
      allowedKeys = 'up','down'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      store = all keys
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    ImageComponent image_target
      flipHoriz = True
      image [set every repeat] = $object_encode
      pos [set every repeat] = $target_pos
      size [set every repeat] = $object_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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    ImageComponent image_lure
      image [set every repeat] = $lure
      pos [set every repeat] = lure_pos
      size [set every repeat] = lure_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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    CodeComponent code_debug_2AFC
      Code Type = Auto->JS
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      Begin Routine:
        print(f"trial {trial_asso.thisN}, image = {image_scene_2AFC}")
        print(f"trial {trial_asso.thisN}, image = {image_target}")
        print(f"trial {trial_asso.thisN}, image = {image_lure}")
  Routine Example_PAL
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    ImageComponent image_ex_scene
      image [set every repeat] = $scene_encode
      pos = (-200,0)
      size [set every repeat] = scene_size
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_ex_object
      image [set every repeat] = $object_encode
      pos = (300, 0)
      size [set every repeat] = object_size
      startVal [time (s)] = 0.0
      units = pix
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    SliderComponent slider_example
      forceEndRoutine = True
      granularity = 1
      labels = '1','2','3','4','5'
      letterHeight = 0.05
      pos = (0, -0.35)
      size = (0.8, 0.05)
      startVal [time (s)] = 2.5
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_example
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 2.5
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      text:
        Qual o nível de congruência/compatibilidade entre as duas imagens?
        1- Incongruente                 5 - Congruente
  Routine Explain_Rating
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    TextComponent text_explain_rate
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ao fim de 2,5 segundos, vai aparecer uma barra de avaliação de 1 a 5.
        Pedimos que seleciones o nível de congruência/compatibilidade entre as duas imagens.

        1- Incongruente
        5- Congruente


        Prime ESPAÇO para um exemplo
    KeyboardComponent key_explainPAL
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Explain_Old_New
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    TextComponent text_explain_old_new
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        No primeiro teste de memória, vamos apresentar imagens de cenas.
        Se reconheceres a imagem como sendo uma das que aprendeste, prime a FLECHA ESQUERDA '<-' ou na TECLA 'V'

        Se a imagem for nova, que não faz parte das imagens que aprendeste, então prime a FLECHA DIREITA '->' ou na TECLA 'N'.

        Tens 2,5 segundos. Se depois de primires um botão mudares de ideias, basta primir a outra flecha.
        Prime ESPAÇO para um exemplo
    KeyboardComponent key_explain_old
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Exemplo_old
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    ImageComponent image_exemplo_old_new
      flipHoriz = True
      image [set every repeat] = $ex_scene_old_new
      size [set every repeat] = scene_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      units = pix
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    KeyboardComponent key_ex_old
      allowedKeys = 'v','n','left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      store = all keys
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    TextComponent text_ex_old
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Prime <- ou V se a imagem for VELHA

        Prime -> ou N se a imagem for NOVA
  Routine Start_Recall
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    TextComponent text_start_recall
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Exemplo concluído. Se tiveres dúvidas, chama o experimentador.


        Prime ESPAÇO para começar o teste
    KeyboardComponent key_start_recall
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explain_2AFC
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    TextComponent text_explain_2afc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vão aparecer três imagens: uma cena que viste anteriormente, e dois objetos.
        Um dos objetos viste antes associado à cena,  durante a aprendizagem.
        Se o objeto associado estiver em cima, prime a FLECHA de CIMA. Se o objeto associado for o de baixo, prime a FLECHA de BAIXO.

        Tens 2,5 segundos. Se depois de primires um botão mudares de ideias, basta primir a outra flecha.

        Prime ESPAÇO para um exemplo.
    KeyboardComponent key_end_explain_2afc
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Exemplo_2AFC
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    ImageComponent image_ex_2AFC
      image [set every repeat] = $scene_encode
      pos = (-200, 0)
      size [set every repeat] = scene_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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    ImageComponent image_ex_target
      image [set every repeat] = $object_encode
      pos [set every repeat] = target_pos
      size [set every repeat] = object_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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    ImageComponent image_ex_lure
      image [set every repeat] = $lure
      pos [set every repeat] = lure_pos
      size [set every repeat] = lure_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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    KeyboardComponent key_ex_2AFC
      allowedKeys = 'up','down'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      store = all keys
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  Routine end
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Experiência concluída.
        Obrigada por participares!
  Routine go_nogo_task
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    CodeComponent code_gonogo
      Code Type = Py
      Begin Routine:
        # Importa a função
        sys.path.append('caminho/para/pasta')
        from Go_NoGo import run_gonogo_task

        # Roda a tarefa go nogo na janela do Builder
        resultados = run_gonogo_task(win=win)

        # Guarda os dados na experiência
        for r in resultados:
            thisExp.addData('trial_type', r['type'])
            thisExp.addData('response', r['response'])
            thisExp.addData('rt', r['rt'])
            thisExp.addData('correct', r['correct'])
            thisExp.nextEntry()
  Routine gonogo_task
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        # Importa seu código completo
        import sys
        sys.path.append('.')  # Permite importar da pasta atual

        # Execute a tarefa
        # No componente Code, use:
        with open('Go_NoGo.py', 'r', encoding='utf-8') as f:
            exec(f.read())

        # Continue com o resto do experimento (se houver)
        continueRoutine = False  # Termina esta rotina
Flow
  Routine Welcome
  Routine Explanation_PAL
  Routine Explain_Rating
  LoopInitiator example loopType="TrialHandler"
    conditionsFile = Exemplo_encode.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 1, 'scene_encode': 'Scenes_Dataset/movie_theater_A.jpg', 'scene_size': (600, 364), 'object_encode': 'Objects_Dataset/movie_reels.jpg', 'object_size': (350, 268), 'condition_encode': 'congruent', 'lure': 'Objects_Dataset/3d_glasses.jpg', 'lure_size': (300, 300), 'ex_new': 'Scenes_Dataset/building_entrance_A.jpg', 'new_scene_size': (600, 400)},
      {'Index': 2, 'scene_encode': 'Scenes_Dataset/museum_A.jpg', 'scene_size': (600, 337), 'object_encode': 'Objects_Dataset/picnic_towel.jpg', 'object_size': (300, 300), 'condition_encode': 'incongruent', 'lure': 'Objects_Dataset/fluorescent_bracelets.jpg', 'lure_size': (300, 300), 'ex_new': 'Scenes_Dataset/boat_interior_A.jpg', 'new_scene_size': (600, 400)}]
    Routine Example_PAL
    Routine blank
  LoopTerminator example
  Routine Start_PAL
  LoopInitiator trial_encode loopType="TrialHandler"
    conditionsFile = encode_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'order_pairs': 1, 'scene_encode': 'Scenes_Dataset/airport_A.jpg', 'scene_size': (600, 338), 'object_encode': 'Objects_Dataset/suitcase.jpg', 'object_size': (226, 350), 'condition_encode': 'Congruent', 'lure': 'Objects_Dataset/luggage_cart.jpg', 'lure_size': None, 'target_pos': (300, -200), 'lure_pos': (300, 200)},
      {'order_pairs': 2, 'scene_encode': 'Scenes_Dataset/storage_A.jpg', 'scene_size': (600, 450), 'object_encode': 'Objects_Dataset/torch.jpg', 'object_size': (210, 300), 'condition_encode': 'Incongruent', 'lure': 'Objects_Dataset/semaphore.jpg', 'lure_size': None, 'target_pos': (300, -200), 'lure_pos': (300, 200)},
      {'order_pairs': 3, 'scene_encode': 'Scenes_Dataset/nursery_A.jpg', 'scene_size': (600, 450), 'object_encode': 'Objects_Dataset/feeding_bottle.jpg', 'object_size': (300, 295), 'condition_encode': 'Congruent', 'lure': 'Objects_Dataset/mobile_baby.jpg', 'lure_size': None, 'target_pos': (300, -200), 'lure_pos': (300, 200)},
      {'order_pairs': 4, 'scene_encode': 'Scenes_Dataset/basketball_field_A.jpg', 'scene_size': (600, 399), 'object_encode': 'Objects_Dataset/basketball.jpg', 'object_size': (282, 300), 'condition_encode': 'Congruent', 'lure': 'Objects_Dataset/whistle.jpg', 'lure_size': None, 'target_pos': (300, -200), 'lure_pos': (300, 200)}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
    Routine Encode
    Routine blank
  LoopTerminator trial_encode
  Routine Pause_1
  Routine Explanation_GoNo
  Routine go_nogo_task
  Routine Cog_Oral
  Routine Retomar
  Routine Explanation_Recall
  Routine Explain_Old_New
  LoopInitiator trial_ex_old loopType="TrialHandler"
    conditionsFile = Exemplo_old.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 1, 'scene_encode': 'Scenes_Dataset/movie_theater_A.jpg', 'scene_size': (600, 364), 'condition_encode': ' old'},
      {'Index': 2, 'scene_encode': 'Scenes_Dataset/museum_A.jpg', 'scene_size': (600, 337), 'condition_encode': 'old'},
      {'Index': 3, 'scene_encode': 'Scenes_Dataset/building_entrance_A.jpg', 'scene_size': (600, 400), 'condition_encode': 'new'},
      {'Index': 4, 'scene_encode': 'Scenes_Dataset/boat_interior_A.jpg', 'scene_size': (600, 400), 'condition_encode': 'new'}]
    Routine Exemplo_old
    Routine blank
  LoopTerminator trial_ex_old
  Routine Start_Recall
  LoopInitiator trial_item loopType="TrialHandler"
    conditionsFile = old_new.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'INDEX': 1, 'CONGRUENCY': 'Congruent', 'CONDITION': 'old', 'old_new_scene': 'Scenes_Dataset/airport_A.jpg', 'size_scene': (600, 338)},
      {'INDEX': 2, 'CONGRUENCY': 'Incongruent', 'CONDITION': 'old', 'old_new_scene': 'Scenes_Dataset/storage_A.jpg', 'size_scene': (600, 450)},
      {'INDEX': 3, 'CONGRUENCY': 'Congruent', 'CONDITION': 'old', 'old_new_scene': 'Scenes_Dataset/nursery_A.jpg', 'size_scene': (600, 450)},
      {'INDEX': 4, 'CONGRUENCY': 'Congruent', 'CONDITION': 'old', 'old_new_scene': 'Scenes_Dataset/basketball_field_A.jpg', 'size_scene': (600, 399)},
      {'INDEX': 5, 'CONGRUENCY': 'Incongruent', 'CONDITION': 'old', 'old_new_scene': 'Scenes_Dataset/tree_house.jpg', 'size_scene': (600, 375)},
      {'INDEX': 6, 'CONGRUENCY': 'Congruent', 'CONDITION': 'old', 'old_new_scene': 'Scenes_Dataset/castle_A.jpg', 'size_scene': (600, 450)},
      {'INDEX': 7, 'CONGRUENCY': 'Incongruent', 'CONDITION': 'old', 'old_new_scene': 'Scenes_Dataset/sky_A.jpg', 'size_scene': (600, 398)},
      {'INDEX': 8, 'CONGRUENCY': 'Congruent', 'CONDITION': 'old', 'old_new_scene': 'Scenes_Dataset/circus_A.jpg', 'size_scene': (600, 421)},
      {'INDEX': 9, 'CONGRUENCY': 'Congruent', 'CONDITION': 'old', 'old_new_scene': 'Scenes_Dataset/vault_A.jpg', 'size_scene': (600, 400)},
      {'INDEX': 10, 'CONGRUENCY': 'Incongruent', 'CONDITION': 'old', 'old_new_scene': 'Scenes_Dataset/clinic_A.jpg', 'size_scene': (600, 400)},
      {'INDEX': 11, 'CONGRUENCY': 'Incongruent', 'CONDITION': 'old', 'old_new_scene': 'Scenes_Dataset/kitchen_A.jpg', 'size_scene': (600, 450)}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
    Routine Old_New
    Routine blank
  LoopTerminator trial_item
  Routine End_Old_New
  Routine Explain_2AFC
  LoopInitiator trial_ex_2AFC loopType="TrialHandler"
    conditionsFile = Exemplo_encode.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 1, 'scene_encode': 'Scenes_Dataset/movie_theater_A.jpg', 'scene_size': (600, 364), 'object_encode': 'Objects_Dataset/movie_reels.jpg', 'object_size': (350, 268), 'target_pos': (250, -200), 'condition_encode': 'congruent', 'lure': 'Objects_Dataset/3d_glasses.jpg', 'lure_size': (300, 300), 'lure_pos': (250, 200), 'ex_new': 'Scenes_Dataset/building_entrance_A.jpg', 'new_scene_size': (600, 400)},
      {'Index': 2, 'scene_encode': 'Scenes_Dataset/museum_A.jpg', 'scene_size': (600, 337), 'object_encode': 'Objects_Dataset/picnic_towel.jpg', 'object_size': (300, 300), 'target_pos': (250, 200), 'condition_encode': 'incongruent', 'lure': 'Objects_Dataset/fluorescent_bracelets.jpg', 'lure_size': (300, 300), 'lure_pos': (250, -200), 'ex_new': 'Scenes_Dataset/boat_interior_A.jpg', 'new_scene_size': (600, 400)}]
    Routine Exemplo_2AFC
    Routine blank
  LoopTerminator trial_ex_2AFC
  Routine Start_Recall
  LoopInitiator trial_asso loopType="TrialHandler"
    conditionsFile = encode_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'order_pairs': 1, 'scene_encode': 'Scenes_Dataset/airport_A.jpg', 'scene_size': (600, 338), 'object_encode': 'Objects_Dataset/suitcase.jpg', 'object_size': (226, 350), 'condition_encode': 'Congruent', 'lure': 'Objects_Dataset/luggage_cart.jpg', 'lure_size': (232, 300), 'target_pos': (300, -200), 'lure_pos': (300, 200)},
      {'order_pairs': 2, 'scene_encode': 'Scenes_Dataset/storage_A.jpg', 'scene_size': (600, 450), 'object_encode': 'Objects_Dataset/torch.jpg', 'object_size': (210, 300), 'condition_encode': 'Incongruent', 'lure': 'Objects_Dataset/semaphore.jpg', 'lure_size': (199, 300), 'target_pos': (300, -200), 'lure_pos': (300, 200)},
      {'order_pairs': 3, 'scene_encode': 'Scenes_Dataset/nursery_A.jpg', 'scene_size': (600, 450), 'object_encode': 'Objects_Dataset/feeding_bottle.jpg', 'object_size': (300, 295), 'condition_encode': 'Congruent', 'lure': 'Objects_Dataset/mobile_baby.jpg', 'lure_size': (350, 263), 'target_pos': (300, -200), 'lure_pos': (300, 200)},
      {'order_pairs': 4, 'scene_encode': 'Scenes_Dataset/basketball_field_A.jpg', 'scene_size': (600, 399), 'object_encode': 'Objects_Dataset/basketball.jpg', 'object_size': (282, 300), 'condition_encode': 'Congruent', 'lure': 'Objects_Dataset/whistle.jpg', 'lure_size': (200, 151), 'target_pos': (300, -200), 'lure_pos': (300, 200)}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
    Routine trial_2AFC
    Routine blank
  LoopTerminator trial_asso
  Routine end
