PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = SEED
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Welcome
    RoutineSettingsComponent Welcome
      desc = Welcome screen
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    TextComponent text_hi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bem-vind@!

        Obrigada por participares nesta experiência.



        Prime ESPAÇO para avançar
    KeyboardComponent key_welcome
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Explanation_PAL
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    TextComponent text_Explain_PAL
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Na primeira tarefa, vamos mostrar um par de imagens :
        um local e um objeto.

        Analisa se há uma associação entre o par.

        Prime ESPAÇO para avançar
    KeyboardComponent key_explain_PAL
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine Start_PAL
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    TextComponent text_end_ex
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Exemplo concluído.
    TextComponent text_start_PAL
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      wrapWidth = 1.5
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      text:
        Vamos começar?

        Se tiveres alguma dúvida chama o experimentador.


        Prime a tecla ESPAÇO quando estiveres pronto
    KeyboardComponent key_start_PAL
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      store = first key
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  Routine Encode
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    ImageComponent image_scene_encode
      image [set every repeat] = $Scene
      pos = (-250, 0)
      size [set every repeat] = Scene_Size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent image_object_encode
      image [set every repeat] = $Object_Encode
      pos = (300, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    CodeComponent code_debugPAL
      Code Type = Auto->JS
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      Begin Routine:
        print(f"trial {trial_encode.thisN}, image = {Scene}")
        print(f"trial {trial_encode.thisN}, image = {Object_Encode}")
    TextComponent text_rating
      letterHeight = 0.06
      pos = (0, 0.35)
      startVal [time (s)] = 2.5
      stopVal [time (s)] = 5
      text = Relacionados?
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    SliderComponent slider_cong
      forceEndRoutine = False
      granularity = 1
      labels = '1 - Pouco','2 - Intermédio','3 - Fortemente'
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.83, 0.035)
      startVal [time (s)] = 2.5
      stopVal [time (s)] = 5
      styles = rating
      ticks = (1, 2, 3)
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    KeyboardComponent key_rate
      allowedKeys = 'z','x','c','num_1','num_2','num_3'
      forceEndRoutine = False
      startVal [time (s)] = 2.5
      stopVal [time (s)] = 5
      store = first key
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    CodeComponent EEG_object_encode
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(image_object_encode, 'trigger_sent'):
            del image_object_encode.trigger_sent
      Each Frame:
        if image_object_encode.status == STARTED and not hasattr(image_object_encode, 'trigger_sent'):
            rcs.sendAnnotation('Stim', image_object_encode.image)
            image_object_encode.trigger_sent = True
    CodeComponent EEG_rating
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(key_rate, 'trigger_sent'):
            del key_rate.trigger_sent
      Each Frame:
        if key_rate.status == STARTED and key_rate.keys and not hasattr(key_rate, 'trigger_sent'):

            ## Send response marker
            rcs.sendAnnotation('Rating', str(key_rate.keys))
            ## Send RT marker - removed because unnecessary
            #rt_ms= int (key_rate.rt * 1000)
            #rcs.sendAnnotation(f"RT_{rt_ms}", "Response")

            key_rate.trigger_sent = True
  Routine blank
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    PolygonComponent cross_25
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = $jitter_ITI
      stopVal [duration (s)] = 0.25
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    ImageComponent image_blank
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_ITI
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    CodeComponent debug_jitterITI
      Code Type = Auto->JS
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      Begin Routine:
        print(f"Trial {thisN}: ITI = {jitter_ITI}")
  Routine Pause_1
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    TextComponent text_pausa1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A primeira parte está concluída. Bom trabalho!
        Descansa um momento.

        Prime ESPAÇO quando estiveres pronto para a próxima tarefa.
    KeyboardComponent key_Start_Cog
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Explanation_GoNo
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    TextComponent text_explanation_GoNo
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = INSERT EXPLANATION GO/NO-GO
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  Routine Go_No
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    PolygonComponent polygon_Go
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent polygon_line
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      ori = 45
      shape = cross
      size = (0.35,0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Cog_Oral
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    TextComponent text_endGo
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Tarefa concluída.
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    TextComponent text_call
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = O experimentador vem agora ter contigo para duas tarefas orais.
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    KeyboardComponent key_end_cog
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 10
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  Routine Retomar
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    TextComponent text_retomar
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Pronto para as próximas tarefas?
        Prime ESPAÇO para a explicação.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Explanation_Recall
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    TextComponent text_explain_recall
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vamos fazer agora duas tarefas para testar a tua memória.
        Será que te lembras dos pares de imagens?


        Prime ESPAÇO para continuar
    KeyboardComponent key_continue
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End_Old_New
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    TextComponent text_end_item
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Tarefa concluída, bom trabalho! Descansa um momento.

        Só falta mais uma.

        Prime ESPAÇO quando estiveres pronto para a explicação da última tarefa.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_2AFC
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    ImageComponent image_scene_2AFC
      image [set every repeat] = $Scene
      pos = (-250, 0)
      size [set every repeat] = Scene_Size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    KeyboardComponent key_AFC
      allowedKeys = 'up','down'
      correctAns = $Correct_key_AFC
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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    ImageComponent image_target
      image [set every repeat] = $Object_Encode
      pos [set every repeat] = $Target_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent image_lure
      image [set every repeat] = $Obj_Lure
      pos [set every repeat] = Lure_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    CodeComponent code_debug_2AFC
      Code Type = Auto->JS
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      Begin Routine:
        print(f"trial {trial_asso.thisN}, image = {Scene}")
        print(f"trial {trial_asso.thisN}, image = {Object_Encode}")
        print(f"trial {trial_asso.thisN}, image = {Obj_Lure}")
    CodeComponent EEG_image_AFC
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(image_target, 'trigger_sent'):
            del image_target.trigger_sent
      Each Frame:
        if image_target.status == STARTED and not hasattr(image_target, 'trigger_sent'):
            rcs.sendAnnotation('AFC', image_target.image)
            image_target.trigger_sent = True
    CodeComponent EEG_key_AFC
      Code Type = Both
      Begin JS Routine:
        if (("asso_trigger_sent" in key_AFC)) {
            delete key_AFC.asso_trigger_sent;
        }
      Begin Routine:
        if hasattr(key_AFC, 'asso_trigger_sent'):
            del key_AFC.asso_trigger_sent
      Each Frame:
        if key_AFC.status == STARTED and key_AFC.keys and not hasattr(key_AFC, 'asso_trigger_sent'):
            rcs.sendAnnotation('Resp_Asso', str(key_AFC.keys))
            #rcs.sendAnnotation('RT_Asso', str(key_AFC.rt))
            key_AFC.asso_trigger_sent = True
      Each JS Frame:
        if ((((key_AFC.status === PsychoJS.Status.STARTED) && key_AFC.keys) && (! ("asso_trigger_sent" in key_AFC)))) {
            rcs.sendAnnotation("Resp_Asso", key_AFC.keys.toString());
            key_AFC.asso_trigger_sent = true;
        }
  Routine Example_PAL
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    ImageComponent image_ex_scene
      image [set every repeat] = $ex_scene_encode
      pos = (-250,0)
      size [set every repeat] = ex_scene_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent image_ex_object
      image [set every repeat] = $ex_object_encode
      pos = (300, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    SliderComponent slider_example
      forceEndRoutine = False
      granularity = 1
      labels = '1 - Pouco','2 - Intermédio','3 - Fortemente'
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.83, 0.04)
      startVal [time (s)] = 2.5
      stopVal [time (s)] = 5
      styles = rating
      ticks = (1, 2, 3)
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    TextComponent text_example
      letterHeight = 0.06
      pos = (0, 0.35)
      startVal [time (s)] = 2.5
      stopVal [time (s)] = 5
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      text:
        Relacionados?
    KeyboardComponent key_ex_rate
      allowedKeys = 'z','x','c','num_1','num_2','num_3'
      forceEndRoutine = False
      startVal [time (s)] = 2.5
      stopVal [time (s)] = 5
      store = first key
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  Routine Explain_Rating
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    TextComponent text_explain_rate
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Prime a tecla indicada como '1', '2', ou '3' no teclado numérico (ao lado das flechas) para selecionar o nível de associação do par.

        Tens 2,5 SEGUNDOS para responderes.

        Se não conseguires responder a tempo ou te enganares em alguma(s), não faz mal. Continua e faz o teu melhor!

        Prime ESPAÇO para um exemplo
    KeyboardComponent key_explain_rate
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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  Routine Explain_Old_New
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    TextComponent text_explain_old_new
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        No primeiro teste de memória, vamos apresentar imagens de locais.

        Se reconheceres a imagem como sendo uma das que viste na primeira tarefa, prime a FLECHA ESQUERDA '<-'

        Se a imagem for nova, que não faz parte das imagens que aprendeste, então prime a FLECHA DIREITA '->'

        Tens 3 SEGUNDOS para responder o mais acertadamente possível. Se não conseguires responder a tempo ou errares alguma(s), não faz mal, continua. Faz o teu melhor!

        Prime ESPAÇO para um exemplo
    KeyboardComponent key_explain_old
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Exemplo_old
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    ImageComponent image_exemplo_old_new
      flipHoriz = True
      image [set every repeat] = $ex_scene_old_new
      pos = (0, -0.12)
      size [set every repeat] = scene_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = pix
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    KeyboardComponent key_ex_old
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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    TextComponent text_ex_old
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Prime <- se a imagem for ANTIGA

        Prime -> se a imagem for NOVA
  Routine Start_Recall
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    TextComponent text_start_recall
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Exemplo concluído. Se tiveres qualquer dúvida, chama o experimentador.


        Prime ESPAÇO para começar
    KeyboardComponent key_start_recall
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explain_2AFC
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    TextComponent text_explain_2afc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Vão aparecer três imagens: um local que viste anteriormente, e dois objetos. Um dos objetos viste antes associado ao local, durante a primeira tarefa.

        Se o objeto associado estiver em cima, prime a FLECHA de CIMA.
        Se o objeto associado for o de baixo, prime a FLECHA de BAIXO.

        Tens 3 SEGUNDOS para responder o mais acertadamente possível. Se não conseguires responder a tempo ou errares alguma(s), não faz mal, continua. Faz o teu melhor!

        Prime ESPAÇO para um exemplo.
    KeyboardComponent key_end_explain_2afc
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Exemplo_2AFC
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    ImageComponent image_ex_2AFC
      image [set every repeat] = $ex_scene_encode
      pos = (-250, 0)
      size [set every repeat] = ex_scene_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent image_ex_target
      image [set every repeat] = $ex_object_encode
      pos [set every repeat] = ex_target_pos
      size [set every repeat] = ex_object_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent image_ex_lure
      image [set every repeat] = $ex_lure
      pos [set every repeat] = ex_lure_pos
      size [set every repeat] = ex_lure_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    KeyboardComponent key_ex_2AFC
      allowedKeys = 'up','down'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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  Routine end
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Experiência concluída.
        Obrigada por participares!
  Routine Def_Congruency
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Durante a tarefa:

        Se achares o par INCONGRUENTE (o objeto não faz sentido nesta cena), prime a flecha ESQUERDA

        Se achares o par CONGRUENTE (o objeto faz sentido nesta cena), prime a flecha DIREITA

        Se achares a congruência do par neutra, prime a flecha de CIMA
    SliderComponent slider_explain
      forceEndRoutine = True
      granularity = 1
      labels = '1','2','3'
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3,)
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  Routine Old_New_Task
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    ImageComponent image_old_new
      image [set every repeat] = $Scene
      pos = (0, -0.12)
      size [set every repeat] = Scene_Size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    KeyboardComponent key_item
      allowedKeys = 'left','right'
      correctAns = $Correct_Key_Old
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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    TextComponent text_item
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Prime <- se a imagem for ANTIGA

        Prime -> se a imagem for NOVA
    CodeComponent EEG_image_old
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(image_old_new, 'trigger_sent'):
            del image_old_new.trigger_sent
      Each Frame:
        if image_old_new.status == STARTED and not hasattr(image_old_new, 'trigger_sent'):
            rcs.sendAnnotation('Item', image_old_new.image)
            image_old_new.trigger_sent = True
    CodeComponent EEG_key_Old
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(key_item, 'item_trigger_sent'):
            del key_item.item_trigger_sent
      Each Frame:
        if key_item.status == STARTED and key_item.keys and not hasattr(key_item, 'item_trigger_sent'):
            rcs.sendAnnotation('Resp_Item', str(key_item.keys))
            #rcs.sendAnnotation('RT_Item', str(key_item.rt))
            key_item.item_trigger_sent = True
  Routine Go_Nogo_task
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    CodeComponent code_GoNo
      Code Type = Py
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      Begin Routine:
        # Importa a função
        import sys
        sys.path.append('caminho/para/pasta')
        from Go_NoGo import run_gonogo_task

        # 1. Roda a tarefa – TODOS os 100 trials numa única chamada
        resultados = run_gonogo_task(win)


        # 2. Se a tarefa correu bem, calcula estatísticas e adiciona ao ficheiro do Builder
        if resultados is not None and len(resultados) > 0:
            import pandas as pd
            df = pd.DataFrame(resultados)

            #Estatísticas globais
            total_go    = df[df['trial_type'] == 'go'].shape[0]
            total_nogo  = df[df['trial_type'] == 'nogo'].shape[0]

            hits        = df[(df['trial_type'] == 'go') & (df['correct'] == 1)].shape[0]
            misses      = df[(df['trial_type'] == 'go') & (df['correct'] == 0)].shape[0]
            corr_reject = df[(df['trial_type'] == 'nogo') & (df['correct'] == 1)].shape[0]
            false_alarms= df[(df['trial_type'] == 'nogo') & (df['correct'] == 0)].shape[0]

            # Tempo médio de reação (apenas respostas corretas GO)
            rt_go_correct = df[(df['trial_type'] == 'go') & (df['correct'] == 1)]['rt']
            mean_rt = rt_go_correct.mean() if len(rt_go_correct) > 0 else 0

            #Adiciona ao ficheiro do Builder
            thisExp.addData('n_trials_total', len(df))
            thisExp.addData('n_go', total_go)
            thisExp.addData('n_nogo', total_nogo)
            thisExp.addData('hits', hits)
            thisExp.addData('misses', misses)
            thisExp.addData('correct_rejections', corr_reject)
            thisExp.addData('false_alarms', false_alarms)
            thisExp.addData('go_accuracy_percent', hits/total_go*100 if total_go>0 else 0)
            thisExp.addData('nogo_accuracy_percent', corr_reject/total_nogo*100 if total_nogo>0 else 0)
            thisExp.addData('mean_rt_go_correct', mean_rt)

            print(f" Tarefa concluída. {len(resultados)} ensaios registados.")
            print(" Estatísticas adicionadas ao ficheiro do Builder.")

        else:
            print("⚠️ Tarefa cancelada pelo utilizador ou erro – nada adicionado ao Builder.")
  Routine Explain_PAL
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    TextComponent text_explain_rating
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ao fim de 2,5 SEGUNDOS vai aparecer abaixo uma barra de avaliação. Seleciona o nível de associação entre o par onde:

        1 = Pouco relacionado
        2 = Intermédio
        3 = Fortemente relacionado


        Prime ESPAÇO para avançar
    KeyboardComponent key_explain_
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine EEG_Open
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    CodeComponent code_EEG_open
      Code Type = Auto->JS
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      Begin Experiment:
        import time
        from psychopy import logging
        from psychopy import event
        from psychopy.hardware import brainproducts
        import cv2
        import numpy as np
        import subprocess
        #import os
        #import pyaudio
        import numpy as np
        rcs = brainproducts.RemoteControlServer()

        cwd = os.getcwd()
      End Experiment:
        #rcs.sendAnnotation('Experiment', 'End')
        rcs.sendAnnotation('End','Init')
        rcs.stopRecording()
        cap.release()
        out.release()
        cv2.destroyAllWindows()
        #stream.stop_stream()
        #stream.close()
        #audio.terminate()
        subprocess.run(['taskkill', '/F', '/T', '/PID', str(ffmpeg_process.pid)])
        ffmpeg_process.wait()
  Routine EEG_close
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    CodeComponent code_EEG_close
      Code Type = Auto->JS
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      Begin Routine:
        rcs.sendAnnotation('End', 'Init')
      Each Frame:
        ret, frame= map.read()
        if ret:
            cv2.putText(frame, "End", (0, 450),
                        cv2.FONT_HERSHEY_SIMPLEX, 0.5,
                        (0, 255, 255),
                        1,
                        cv2.LINE_AA)

            out.write(frame)
Flow
  Routine EEG_Open
  Routine Welcome
  Routine Explanation_PAL
  Routine Explain_PAL
  Routine Explain_Rating
  LoopInitiator exemplo_PAL loopType="TrialHandler"
    conditionsFile = Exemplo_encode.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 'Ex1', 'ex_scene_encode': 'Scenes_Dataset/sky_A.jpg', 'ex_scene_size': (600, 398), 'ex_object_encode': 'Objects_Dataset/hang_glider.png', 'ex_object_size': (450, 275), 'ex_target_pos': (300, -200), 'ex_condition_encode': 'congruent', 'ex_lure': 'Objects_Dataset/drone.png', 'ex_lure_size': (300, 144), 'ex_lure_pos': (300, 200), 'ex_new': 'Scenes_Dataset/temple_A.jpg', 'ex_new_scene_size': (600, 358), 'jitter_ITI': 2},
      {'Index': 'Ex2', 'ex_scene_encode': 'Scenes_Dataset/painting_workshop_A.jpg', 'ex_scene_size': (600, 450), 'ex_object_encode': 'Objects_Dataset/fish_hook.png', 'ex_object_size': (130, 200), 'ex_target_pos': (300, 200), 'ex_condition_encode': 'incongruent', 'ex_lure': 'Objects_Dataset/barrier.png', 'ex_lure_size': (300, 300), 'ex_lure_pos': (300, -200), 'ex_new': 'Scenes_Dataset/athletics_track_A', 'ex_new_scene_size': (600, 450), 'jitter_ITI': 2.5},
      {'Index': 'Ex3', 'ex_scene_encode': 'Scenes_Dataset/cellars_A.jpg', 'ex_scene_size': (600, 399), 'ex_object_encode': 'Objects_Dataset/barrier.png', 'ex_object_size': (300, 300), 'ex_target_pos': (300, -200), 'ex_condition_encode': 'incongruent', 'ex_lure': 'Objects_Dataset/hang_glider.png', 'ex_lure_size': (450, 275), 'ex_lure_pos': (300, 200), 'ex_new': None, 'ex_new_scene_size': None, 'jitter_ITI': 3},
      {'Index': 'Ex4', 'ex_scene_encode': 'Scenes_Dataset/river_B.jpg', 'ex_scene_size': (600, 450), 'ex_object_encode': 'Objects_Dataset/drone.png', 'ex_object_size': (300, 144), 'ex_target_pos': (300, 200), 'ex_condition_encode': 'congruent', 'ex_lure': 'Objects_Dataset/fish_hook.png', 'ex_lure_size': (130, 200), 'ex_lure_pos': (300, -200), 'ex_new': None, 'ex_new_scene_size': None, 'jitter_ITI': 2.5}]
    Routine blank
    Routine Example_PAL
  LoopTerminator exemplo_PAL
  Routine Start_PAL
  LoopInitiator trial_encode loopType="TrialHandler"
    Selected rows = 0:60
    conditionsFile = encode_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 1, 'Scene': 'Scenes_Dataset/office_work_A.jpg', 'Scene_Size': (600, 470), 'Condition_Encode': 'Congruent', 'Object_Encode': 'Objects_Dataset/staple_puller_retouched.png', 'Object_Size': (400, 400), 'Condition_Old': 'old', 'Correct_Key_Old': 'left', 'Obj_Lure': 'Objects_Dataset/clock.png', 'Lure_size': (250, 248), 'Target_pos': (300, -200), 'Lure_pos': (300, 200), 'Correct_key_AFC': 'down', 'jitter_ITI': 2},
      {'Index': 2, 'Scene': 'Scenes_Dataset/waiting_room_A.jpg', 'Scene_Size': (600, 450), 'Condition_Encode': 'Congruent', 'Object_Encode': 'Objects_Dataset/clock.png', 'Object_Size': (250, 248), 'Condition_Old': 'old', 'Correct_Key_Old': 'left', 'Obj_Lure': 'Objects_Dataset/water_dispenser.png', 'Lure_size': (300, 300), 'Target_pos': (300, -200), 'Lure_pos': (300, 200), 'Correct_key_AFC': 'down', 'jitter_ITI': 2.05},
      {'Index': 3, 'Scene': 'Scenes_Dataset/car_interior_A.jpg', 'Scene_Size': (600, 389), 'Condition_Encode': 'Congruent', 'Object_Encode': 'Objects_Dataset/car_mat.png', 'Object_Size': (230, 258), 'Condition_Old': 'old', 'Correct_Key_Old': 'left', 'Obj_Lure': 'Objects_Dataset/car_key.png', 'Lure_size': (300, 125), 'Target_pos': (300, -200), 'Lure_pos': (300, 200), 'Correct_key_AFC': 'down', 'jitter_ITI': 2.1},
      {'Index': 4, 'Scene': 'Scenes_Dataset/pastry_shop_A.jpg', 'Scene_Size': (600, 400), 'Condition_Encode': 'Congruent', 'Object_Encode': 'Objects_Dataset/cake_holder.png', 'Object_Size': (300, 209), 'Condition_Old': 'old', 'Correct_Key_Old': 'left', 'Obj_Lure': 'Objects_Dataset/cake_tongs_retouched.png', 'Lure_size': (300, 75), 'Target_pos': (300, -200), 'Lure_pos': (300, 200), 'Correct_key_AFC': 'down', 'jitter_ITI': 2.15}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
    Routine blank
    Routine Encode
  LoopTerminator trial_encode
  Routine Pause_1
  Routine Go_Nogo_task
  Routine Cog_Oral
  Routine Retomar
  Routine Explanation_Recall
  Routine Explain_Old_New
  LoopInitiator trial_ex_old loopType="TrialHandler"
    conditionsFile = Exemplo_old.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 1, 'ex_scene_old_new': 'Scenes_Dataset/sky_A.jpg', 'scene_size': (600, 398), 'condition_encode': ' old', 'jitter_ITI': 2},
      {'Index': 2, 'ex_scene_old_new': 'Scenes_Dataset/painting_workshop_A.jpg', 'scene_size': (600, 450), 'condition_encode': 'old', 'jitter_ITI': 3},
      {'Index': 3, 'ex_scene_old_new': 'Scenes_Dataset/temple_A.jpg', 'scene_size': (600, 358), 'condition_encode': 'new', 'jitter_ITI': 2.5},
      {'Index': 4, 'ex_scene_old_new': 'Scenes_Dataset/athletics_track_A', 'scene_size': (600, 450), 'condition_encode': 'new', 'jitter_ITI': 3.25}]
    Routine blank
    Routine Exemplo_old
  LoopTerminator trial_ex_old
  Routine Start_Recall
  LoopInitiator trial_item loopType="TrialHandler"
    Selected rows = 0:90
    conditionsFile = Encode_Pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine Old_New_Task
  LoopTerminator trial_item
  Routine End_Old_New
  Routine Explain_2AFC
  LoopInitiator trial_ex_2AFC loopType="TrialHandler"
    conditionsFile = Exemplo_encode.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 'Ex1', 'ex_scene_encode': 'Scenes_Dataset/sky_A.jpg', 'ex_scene_size': (600, 398), 'ex_object_encode': 'Objects_Dataset/hang_glider.png', 'ex_object_size': (450, 275), 'ex_target_pos': (300, -200), 'ex_condition_encode': 'congruent', 'ex_lure': 'Objects_Dataset/drone.png', 'ex_lure_size': (300, 144), 'ex_lure_pos': (300, 200), 'jitter_ITI': 2},
      {'Index': 'Ex2', 'ex_scene_encode': 'Scenes_Dataset/painting_workshop_A.jpg', 'ex_scene_size': (600, 450), 'ex_object_encode': 'Objects_Dataset/fish_hook.png', 'ex_object_size': (130, 200), 'ex_target_pos': (300, 200), 'ex_condition_encode': 'incongruent', 'ex_lure': 'Objects_Dataset/barrier.png', 'ex_lure_size': (300, 300), 'ex_lure_pos': (300, -200), 'jitter_ITI': 2.5},
      {'Index': 'Ex3', 'ex_scene_encode': 'Scenes_Dataset/cellars_A.jpg', 'ex_scene_size': (600, 399), 'ex_object_encode': 'Objects_Dataset/barrier.png', 'ex_object_size': (300, 300), 'ex_target_pos': (300, -200), 'ex_condition_encode': 'incongruent', 'ex_lure': 'Objects_Dataset/hang_glider.png', 'ex_lure_size': (450, 275), 'ex_lure_pos': (300, 200), 'jitter_ITI': 3},
      {'Index': 'Ex4', 'ex_scene_encode': 'Scenes_Dataset/river_B.jpg', 'ex_scene_size': (600, 450), 'ex_object_encode': 'Objects_Dataset/drone.png', 'ex_object_size': (300, 144), 'ex_target_pos': (300, 200), 'ex_condition_encode': 'congruent', 'ex_lure': 'Objects_Dataset/fish_hook.png', 'ex_lure_size': (130, 200), 'ex_lure_pos': (300, -200), 'jitter_ITI': 2.5}]
    Routine blank
    Routine Exemplo_2AFC
  LoopTerminator trial_ex_2AFC
  Routine Start_Recall
  LoopInitiator trial_asso loopType="TrialHandler"
    Selected rows = 0:60
    conditionsFile = Encode_Pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 1, 'Scene': 'Scenes_Dataset/office_work_A.jpg', 'Scene_Size': (600, 470), 'Condition_Encode': 'Congruent', 'Object_Encode': 'Objects_Dataset/staple_puller_retouched.png', 'Object_Size': (400, 400), 'Condition_Old': 'old', 'Type_Old': 'Cong_target', 'Correct_Key_Old': 'left', 'Obj_Lure': 'Objects_Dataset/clock.png', 'Lure_size': (250, 248), 'Target_pos': (300, -200), 'Lure_pos': (300, 200), 'Correct_key_AFC': 'down', 'jitter_ITI': 2},
      {'Index': 2, 'Scene': 'Scenes_Dataset/waiting_room_A.jpg', 'Scene_Size': (600, 450), 'Condition_Encode': 'Congruent', 'Object_Encode': 'Objects_Dataset/clock.png', 'Object_Size': (250, 248), 'Condition_Old': 'old', 'Type_Old': 'Cong_target', 'Correct_Key_Old': 'left', 'Obj_Lure': 'Objects_Dataset/water_dispenser.png', 'Lure_size': (300, 300), 'Target_pos': (300, -200), 'Lure_pos': (300, 200), 'Correct_key_AFC': 'down', 'jitter_ITI': 2.05},
      {'Index': 3, 'Scene': 'Scenes_Dataset/car_interior_A.jpg', 'Scene_Size': (600, 389), 'Condition_Encode': 'Congruent', 'Object_Encode': 'Objects_Dataset/car_mat.png', 'Object_Size': (230, 258), 'Condition_Old': 'old', 'Type_Old': 'Cong_target', 'Correct_Key_Old': 'left', 'Obj_Lure': 'Objects_Dataset/car_key.png', 'Lure_size': (300, 125), 'Target_pos': (300, -200), 'Lure_pos': (300, 200), 'Correct_key_AFC': 'down', 'jitter_ITI': 2.1},
      {'Index': 4, 'Scene': 'Scenes_Dataset/pastry_shop_A.jpg', 'Scene_Size': (600, 400), 'Condition_Encode': 'Congruent', 'Object_Encode': 'Objects_Dataset/cake_holder.png', 'Object_Size': (300, 209), 'Condition_Old': 'old', 'Type_Old': 'Cong_target', 'Correct_Key_Old': 'left', 'Obj_Lure': 'Objects_Dataset/cake_tongs_retouched.png', 'Lure_size': (300, 75), 'Target_pos': (300, -200), 'Lure_pos': (300, 200), 'Correct_key_AFC': 'down', 'jitter_ITI': 2.15}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
    Routine blank
    Routine trial_2AFC
  LoopTerminator trial_asso
  Routine end
  Routine EEG_close
