PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = lab_monitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Test_trigger
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Hello
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    TextComponent text_Hello
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to test
        Press SPACE
    KeyboardComponent key_resp_move
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trials
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    TextComponent text_instrc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
         tetsing EEG triggers
    ImageComponent image_test
      image [set every repeat] = $ex_scene_old_new
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_trigger_marker
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(image_test, 'trigger_sent'):
            del image_test.trigger_sent
      Each Frame:
        if image_test.status == STARTED and not hasattr(image_test, 'trigger_sent'):
            rcs.sendAnnotation('Stim', image_test.image)
            image_test.trigger_sent = True
  Routine Bye
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    TextComponent text_bye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = End of test
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    KeyboardComponent key_resp_end
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start
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    CodeComponent code_EEG
      Code Type = Auto->JS
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      Before Experiment:
        import time
        from psychopy import logging
        from psychopy.hardware import brainproducts
        import cv2
        import numpy as np
        import subprocess
        import os
        #import pyaudio
        import numpy as np

        from psychopy.hardware.brainproducts import TriggerBox
        tb=TriggerBox()

        #rcs = RemoteControlServer()
        #rcs.sendAnnotation('StimOnset', 'S 1')
        cwd = os.getcwd()

        patient='ID_SEED_testTrigger'
      Begin Routine:
        tb.sendTrigger(1)
      End Experiment:
        #rcs.sendAnnotation('Experiment', 'End')
        #rcs.stopRecording()
        cap.release()
        out.release()
        cv2.destroyAllWindows()
        #stream.stop_stream()
        #stream.close()
        #audio.terminate()

        subprocess.run(['taskkill', '/F', '/T', '/PID', str(ffmpeg_process.pid)])
        ffmpeg_process.wait()
  Routine Close
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    CodeComponent code
      Code Type = Auto->JS
      Begin Routine:
        #rcs.sendAnnotation('End', 'Init')
      Each Frame:
        ret, frame= cap.read()
        if ret:
            cv2.putText(frame, "End", (0, 450),
                        cv2.FONT_HERSHEY_SIMPLEX, 0.5,
                        (0, 255, 255),
                        1,
                        cv2.LINE_AA)

            out.write(frame)
  Routine eeg_code
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    CodeComponent trigger_eeg
      Code Type = Auto->JS
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      Begin Experiment:
        import time
        from psychopy import logging
        from psychopy.hardware import brainproducts
        import cv2
        import numpy as np
        import subprocess
        #import os
        #import pyaudio
        import numpy as np
        rcs = brainproducts.RemoteControlServer()

        cwd = os.getcwd()
      End Experiment:
        #rcs.sendAnnotation('Experiment', 'End')
        rcs.sendAnnotation('End','Init')
        rcs.stopRecording()
        cap.release()
        out.release()
        cv2.destroyAllWindows()
        #stream.stop_stream()
        #stream.close()
        #audio.terminate()
        subprocess.run(['taskkill', '/F', '/T', '/PID', str(ffmpeg_process.pid)])
        ffmpeg_process.wait()
  Routine end_eeg
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    CodeComponent eeg_end
      Code Type = Auto->JS
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      Begin Routine:
        rcs.sendAnnotation('End', 'Init')
      Each Frame:
        ret, frame= map.read()
        if ret:
            cv2.putText(frame, "End", (0, 450),
                        cv2.FONT_HERSHEY_SIMPLEX, 0.5,
                        (0, 255, 255),
                        1,
                        cv2.LINE_AA)

            out.write(frame)
Flow
  Routine eeg_code
  Routine Hello
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Exemplo_old.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'Index': 1, 'ex_scene_old_new': 'Scenes_Dataset/movie_theater_A.jpg', 'scene_size': (600, 364), 'condition_encode': ' old'},
      {'Index': 2, 'ex_scene_old_new': 'Scenes_Dataset/museum_A.jpg', 'scene_size': (600, 337), 'condition_encode': 'old'},
      {'Index': 3, 'ex_scene_old_new': 'Scenes_Dataset/building_entrance_A.jpg', 'scene_size': (600, 400), 'condition_encode': 'new'},
      {'Index': 4, 'ex_scene_old_new': 'Scenes_Dataset/boat_interior_A.jpg', 'scene_size': (600, 400), 'condition_encode': 'new'}]
    Routine trials
  LoopTerminator trials_2
  Routine Bye
  Routine end_eeg
