PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Full_PT
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Welcome
    RoutineSettingsComponent Welcome
      desc = Welcome screen
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    TextComponent text_hi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bem-vindo!

        Obrigada por participar nesta experiência.



        Prime ESPAÇO para avançar
    KeyboardComponent key_welcome
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explanation_PAL
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    TextComponent text_Explain_PAL
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        Na primeira tarefa, vamos mostrar um par de imagens : um local e um objeto. Analisa se há uma associação entre o par.

        Ao fim de 2,5 SEGUNDOS, vai aparecer uma barra de avaliação abaixo, para selecionares o nível de associação entre o par onde:
        1 = Pouco relacionados
        2 = Intermédio
        3 = Fortemente relacionados

        Prime ESPAÇO para avançar
    KeyboardComponent key_explain_PAL
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine Start_PAL
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    TextComponent text_end_ex
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Exemplo concluído.
    TextComponent text_start_PAL
      letterHeight = 0.05
      startVal [time (s)] = 1.5
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      text:
        Vamos começar?

        Se tiveres alguma dúvida chama o experimentador.


        Prime a tecla ESPAÇO quando estiveres pronto
    KeyboardComponent key_start_PAL
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine Encode
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    ImageComponent image_scene_encode
      image [set every repeat] = $scene
      pos = (-200, 0)
      size [set every repeat] = scene_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent image_object_encode
      image [set every repeat] = $object_encode
      pos = (300, 0)
      size [set every repeat] = object_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    CodeComponent code_debugPAL
      Code Type = Auto->JS
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      Begin Routine:
        print(f"trial {trial_encode.thisN}, image = {scene}")
        print(f"trial {trial_encode.thisN}, image = {object_encode}")
    TextComponent text_rating
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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      text:
        Relacionados?
    SliderComponent slider_cong
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = '1 - Pouco Relacionados','2 - Intermédio','3 - Fortemente Relacionados'
      letterHeight = 0.04
      pos = (0, -0.3)
      size = (0.8, 0.04)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      styles = rating
      ticks = (1, 2, 3)
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    KeyboardComponent key_rate
      allowedKeys = 'z','x','c','num_1','num_2','num_3'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      store = first key
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    CodeComponent EEG_obj_encode
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(image_object_encode, 'trigger_sent'):
            del image_object_encode.trigger_sent
      Each Frame:
        if image_object_encode.status == STARTED and not hasattr(image_object_encode, 'trigger_sent'):
            rcs.sendAnnotation('Stim', image_object_encode.image)
            image_object_encode.trigger_sent = True
    CodeComponent EEG_rating
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(key_rate, 'trigger_sent'):
            del key_rate.trigger_sent
      Each Frame:
        if key_rate.status == STARTED and key_rate.keys and not hasattr(key_rate, 'trigger_sent'):

            ## Send response marker
            rcs.sendAnnotation('Rating', str(key_rate.keys))
            ## Send RT marker - removed because unnecessary
            #rt_ms= int (key_rate.rt * 1000)
            #rcs.sendAnnotation(f"RT_{rt_ms}", "Response")

            key_rate.trigger_sent = True
  Routine blank
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    PolygonComponent cross_25
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.25
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    ImageComponent image_blank
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Pause_1
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    TextComponent text_pausa1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A primeira parte está concluída. Bom trabalho!
        Descansa um momento.

        Prime ESPAÇO quando estiveres pronto para a próxima tarefa.
    KeyboardComponent key_Start_Cog
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explanation_GoNo
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    TextComponent text_explanation_GoNo
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = INSERT EXPLANATION GO/NO-GO
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  Routine Go_No
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    PolygonComponent polygon_Go
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent polygon_line
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      ori = 45
      shape = cross
      size = (0.35,0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Cog_Oral
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    TextComponent text_endGo
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Tarefa concluída.
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    TextComponent text_call
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = O experimentador vem agora ter contigo para duas tarefas orais.
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    KeyboardComponent key_end_cog
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 15
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  Routine Retomar
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    TextComponent text_retomar
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Pronto para as próximas tarefas?
        Prime ESPAÇO para a explicação.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explanation_Recall
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    TextComponent text_explain_recall
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vamos fazer agora duas tarefas para testar a tua memória.
        Será que te lembras dos pares de imagens?


        Prime ESPAÇO para continuar
    KeyboardComponent key_continue
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End_Old_New
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    TextComponent text_end_item
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Tarefa concluída, bom trabalho! Descansa um momento.

        Só falta mais uma.

        Prime ESPAÇO quando estiveres pronto para a explicação da última tarefa.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_2AFC
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    ImageComponent image_scene_2AFC
      image [set every repeat] = $scene
      pos = (-250, 0)
      size [set every repeat] = scene_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    KeyboardComponent key_2AFC
      allowedKeys = 'up','down'
      correctAns = $correct_key_AFC
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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    ImageComponent image_target
      image [set every repeat] = $object_encode
      pos [set every repeat] = $target_pos
      size [set every repeat] = $object_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent image_lure
      image [set every repeat] = $lure
      pos [set every repeat] = lure_pos
      size [set every repeat] = lure_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    CodeComponent code_debug_2AFC
      Code Type = Auto->JS
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      Begin Routine:
        print(f"trial {trial_asso.thisN}, image = {image_scene_2AFC}")
        print(f"trial {trial_asso.thisN}, image = {image_target}")
        print(f"trial {trial_asso.thisN}, image = {image_lure}")
    CodeComponent EEG_image_AFC
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(image_target, 'trigger_sent'):
            del image_target.trigger_sent
      Each Frame:
        if image_target.status == STARTED and not hasattr(image_target, 'trigger_sent'):
            rcs.sendAnnotation('AFC', image_target.image)
            image_target.trigger_sent = True
    CodeComponent EEG_Key_2AFC
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(key_2AFC, 'asso_trigger_sent'):
            del key_2AFC.asso_trigger_sent
      Each Frame:
        if key_2AFC.status == STARTED and key_2AFC.keys and not hasattr(key_2AFC, 'asso_trigger_sent'):
            rcs.sendAnnotation('Resp_Asso', str(key_2AFC.keys))
            #rcs.sendAnnotation('RT_Asso', str(key_2AFC.rt))
            key_rate.asso_trigger_sent = True
  Routine Example_PAL
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    ImageComponent image_ex_scene
      image [set every repeat] = $scene_encode
      pos = (-200,0)
      size [set every repeat] = scene_size
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      units = pix
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    ImageComponent image_ex_object
      image [set every repeat] = $object_encode
      pos = (300, 0)
      size [set every repeat] = object_size
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      units = pix
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    SliderComponent slider_example
      forceEndRoutine = False
      granularity = 1
      labels = '1 - Pouco Relacionados','2 - Intermédio','3 - Fortemente Relacionados'
      letterHeight = 0.04
      pos = (0, -0.3)
      size = (0.8, 0.04)
      startVal [time (s)] = 0
      stopVal [time (s)] = 2
      styles = rating
      ticks = (1, 2, 3)
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    TextComponent text_example
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      stopVal [time (s)] = 2
      text = Associados?
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    KeyboardComponent key_ex_rate
      allowedKeys = 'z','x','c','num_1','num_2','num_3'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [time (s)] = 2
      store = first key
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  Routine Explain_Rating
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    TextComponent text_explain_rate
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Prime a tecla indicada como '1', '2', ou '3' no teclado numérico (ao lado das flechas) para selecionar o nível de associação entre o par.

        Tens 2,5SEGUNDOS para responder. Se te enganares ou não responderes a tempo em alguma(s), não faz mal. Continua!

        Prime ESPAÇO para um exemplo
    KeyboardComponent key_explain_rate
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine Explain_Old_New
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    TextComponent text_explain_old_new
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        No primeiro teste de memória, vamos apresentar imagens de locais.

        Se reconheceres a imagem como sendo uma das que viste na primeira tarefa, prime a FLECHA ESQUERDA '<-'

        Se a imagem for nova, que não faz parte das imagens que aprendeste, então prime a FLECHA DIREITA '->'

        Tens 3 SEGUNDOS para responder o mais acertadamente possível. Se não conseguires responder a tempo ou errares alguma(s), não faz mal, continua. Faz o teu melhor!

        Prime ESPAÇO para um exemplo
    KeyboardComponent key_explain_old
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Exemplo_old
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    ImageComponent image_exemplo_old_new
      flipHoriz = True
      image [set every repeat] = $ex_scene_old_new
      size [set every repeat] = scene_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = pix
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    KeyboardComponent key_ex_old
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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    TextComponent text_ex_old
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Prime <- se a imagem for ANTIGA

        Prime -> se a imagem for NOVA
  Routine Start_Recall
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    TextComponent text_start_recall
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Exemplo concluído. Se tiveres qualquer dúvida, chama o experimentador.


        Prime ESPAÇO para começar
    KeyboardComponent key_start_recall
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explain_2AFC
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    TextComponent text_explain_2afc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Vão aparecer três imagens: um local que viste anteriormente e dois objetos. Um dos objetos viste antes associado ao local, durante a primeira tarefa.

        Se o objeto associado estiver em cima, prime a FLECHA de CIMA.
        Se o objeto associado for o de baixo, prime a FLECHA de BAIXO.

        Tens 3 SEGUNDOS para responder o mais acertadamente possível. Se não conseguires responder a tempo ou errares alguma(s), não faz mal, continua. Faz o teu melhor!

        Prime ESPAÇO para um exemplo.
    KeyboardComponent key_end_explain_2afc
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Exemplo_2AFC
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    ImageComponent image_ex_2AFC
      image [set every repeat] = $scene_encode
      pos = (-200, 0)
      size [set every repeat] = scene_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent image_ex_target
      image [set every repeat] = $object_encode
      pos [set every repeat] = target_pos
      size [set every repeat] = object_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent image_ex_lure
      image [set every repeat] = $lure
      pos [set every repeat] = lure_pos
      size [set every repeat] = lure_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    KeyboardComponent key_ex_2AFC
      allowedKeys = 'up','down'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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  Routine end
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text:
        Experiência concluída.
        Obrigada por participares!
  Routine Def_Congruency
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Durante a tarefa:

        Se achares o par INCONGRUENTE (o objeto não faz sentido nesta cena), prime a flecha ESQUERDA

        Se achares o par CONGRUENTE (o objeto faz sentido nesta cena), prime a flecha DIREITA

        Se achares a congruência do par neutra, prime a flecha de CIMA
    SliderComponent slider_explain
      forceEndRoutine = True
      granularity = 1
      labels = '1','2','3'
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3,)
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  Routine Old_New_Task
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    ImageComponent image_old_new
      image [set every repeat] = $scene
      pos = (0, -0.12)
      size [set every repeat] = scene_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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    KeyboardComponent key_item
      allowedKeys = 'left','right'
      correctAns = $correct_key_old
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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    TextComponent text_item
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Prime <- se a imagem for ANTIGA

        Prime -> se a imagem for NOVA
    CodeComponent code_EEG_old
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(image_old_new, 'trigger_sent'):
            del image_old_new.trigger_sent
      Each Frame:
        if image_old_new.status == STARTED and not hasattr(image_old_new, 'trigger_sent'):
            rcs.sendAnnotation('Item', image_old_new.image)
            image_old_new.trigger_sent = True
    CodeComponent EEG_key_old
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(key_item, 'item_trigger_sent'):
            del key_item.item_trigger_sent
      Each Frame:
        if key_item.status == STARTED and key_item.keys and not hasattr(key_item, 'item_trigger_sent'):
            rcs.sendAnnotation('Resp_Item', str(key_item.keys))
            #rcs.sendAnnotation('RT_Item', str(key_item.rt))
            key_item.item_trigger_sent = True
  Routine Go_Nogo_task
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    CodeComponent code_GoNo
      Code Type = Py
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      Begin Routine:
        # Importa a função
        import sys
        sys.path.append('caminho/para/pasta')
        from Go_NoGo import run_gonogo_task

        # 1. Roda a tarefa – TODOS os 100 trials numa única chamada
        resultados = run_gonogo_task(win)


        # 2. Se a tarefa correu bem, calcula estatísticas e adiciona ao ficheiro do Builder
        if resultados is not None and len(resultados) > 0:
            import pandas as pd
            df = pd.DataFrame(resultados)

            #Estatísticas globais
            total_go    = df[df['trial_type'] == 'go'].shape[0]
            total_nogo  = df[df['trial_type'] == 'nogo'].shape[0]

            hits        = df[(df['trial_type'] == 'go') & (df['correct'] == 1)].shape[0]
            misses      = df[(df['trial_type'] == 'go') & (df['correct'] == 0)].shape[0]
            corr_reject = df[(df['trial_type'] == 'nogo') & (df['correct'] == 1)].shape[0]
            false_alarms= df[(df['trial_type'] == 'nogo') & (df['correct'] == 0)].shape[0]

            # Tempo médio de reação (apenas respostas corretas GO)
            rt_go_correct = df[(df['trial_type'] == 'go') & (df['correct'] == 1)]['rt']
            mean_rt = rt_go_correct.mean() if len(rt_go_correct) > 0 else 0

            #Adiciona ao ficheiro do Builder
            thisExp.addData('n_trials_total', len(df))
            thisExp.addData('n_go', total_go)
            thisExp.addData('n_nogo', total_nogo)
            thisExp.addData('hits', hits)
            thisExp.addData('misses', misses)
            thisExp.addData('correct_rejections', corr_reject)
            thisExp.addData('false_alarms', false_alarms)
            thisExp.addData('go_accuracy_percent', hits/total_go*100 if total_go>0 else 0)
            thisExp.addData('nogo_accuracy_percent', corr_reject/total_nogo*100 if total_nogo>0 else 0)
            thisExp.addData('mean_rt_go_correct', mean_rt)

            print(f" Tarefa concluída. {len(resultados)} ensaios registados.")
            print(" Estatísticas adicionadas ao ficheiro do Builder.")

        else:
            print("⚠️ Tarefa cancelada pelo utilizador ou erro – nada adicionado ao Builder.")
  Routine EEG_open
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    CodeComponent code_EEG_open
      Code Type = Auto->JS
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      Begin Experiment:
        import time
        from psychopy import logging
        from psychopy import event
        from psychopy.hardware import brainproducts
        import cv2
        import numpy as np
        import subprocess
        #import os
        #import pyaudio
        import numpy as np
        rcs = brainproducts.RemoteControlServer()

        cwd = os.getcwd()
      End Experiment:
        #rcs.sendAnnotation('Experiment', 'End')
        rcs.sendAnnotation('End','Init')
        rcs.stopRecording()
        cap.release()
        out.release()
        cv2.destroyAllWindows()
        #stream.stop_stream()
        #stream.close()
        #audio.terminate()
        subprocess.run(['taskkill', '/F', '/T', '/PID', str(ffmpeg_process.pid)])
        ffmpeg_process.wait()
  Routine EEG_close
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    CodeComponent EEG_close
      Code Type = Auto->JS
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      Begin Routine:
        rcs.sendAnnotation('End', 'Init')
      Each Frame:
        ret, frame= map.read()
        if ret:
            cv2.putText(frame, "End", (0, 450),
                        cv2.FONT_HERSHEY_SIMPLEX, 0.5,
                        (0, 255, 255),
                        1,
                        cv2.LINE_AA)

            out.write(frame)
Flow
  Routine EEG_open
  Routine Welcome
  Routine Explanation_PAL
  Routine Explain_Rating
  LoopInitiator exemplo_PAL loopType="TrialHandler"
    conditionsFile = Exemplo_encode.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 1, 'scene_encode': 'Scenes_Dataset/movie_theater_A.jpg', 'scene_size': (600, 364), 'object_encode': 'Objects_Dataset/movie_reels.jpg', 'object_size': (350, 268), 'target_pos': (300, -200), 'condition_encode': 'congruent', 'lure': 'Objects_Dataset/3d_glasses.jpg', 'lure_size': (300, 300), 'lure_pos': (300, 200), 'ex_new': 'Scenes_Dataset/building_entrance_A.jpg', 'new_scene_size': (600, 400), 'jitter_ITI': 2},
      {'Index': 2, 'scene_encode': 'Scenes_Dataset/museum_A.jpg', 'scene_size': (600, 337), 'object_encode': 'Objects_Dataset/picnic_towel.jpg', 'object_size': (300, 300), 'target_pos': (300, 200), 'condition_encode': 'incongruent', 'lure': 'Objects_Dataset/fluorescent_bracelets.jpg', 'lure_size': (300, 300), 'lure_pos': (300, -200), 'ex_new': 'Scenes_Dataset/boat_interior_A.jpg', 'new_scene_size': (600, 400), 'jitter_ITI': 2.5}]
    Routine blank
    Routine Example_PAL
  LoopTerminator exemplo_PAL
  Routine Start_PAL
  LoopInitiator trial_encode loopType="TrialHandler"
    Selected rows = 0:20
    conditionsFile = encode_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'order_pairs': 1, 'scene': 'Scenes_Dataset/airport_A.jpg', 'scene_size': (600, 338), 'condition_old': 'old', 'correct_key_old': 'left', 'object_encode': 'Objects_Dataset/suitcase.jpg', 'object_size': (226, 350), 'condition_encode': 'Congruent', 'lure': 'Objects_Dataset/luggage_cart.jpg', 'lure_size': (232, 300), 'target_pos': (300, -200), 'lure_pos': (300, 200), 'correct_key_AFC': 'down', 'jitter_ITI': 2},
      {'order_pairs': 2, 'scene': 'Scenes_Dataset/storage_A.jpg', 'scene_size': (600, 450), 'condition_old': 'old', 'correct_key_old': 'left', 'object_encode': 'Objects_Dataset/torch.jpg', 'object_size': (210, 300), 'condition_encode': 'Incongruent', 'lure': 'Objects_Dataset/semaphore.jpg', 'lure_size': (199, 300), 'target_pos': (300, -200), 'lure_pos': (300, 200), 'correct_key_AFC': 'down', 'jitter_ITI': 2.05},
      {'order_pairs': 3, 'scene': 'Scenes_Dataset/nursery_A.jpg', 'scene_size': (600, 450), 'condition_old': 'old', 'correct_key_old': 'left', 'object_encode': 'Objects_Dataset/feeding_bottle.jpg', 'object_size': (300, 295), 'condition_encode': 'Congruent', 'lure': 'Objects_Dataset/mobile_baby.jpg', 'lure_size': (350, 263), 'target_pos': (300, -200), 'lure_pos': (300, 200), 'correct_key_AFC': 'down', 'jitter_ITI': 2.1},
      {'order_pairs': 4, 'scene': 'Scenes_Dataset/basketball_field_A.jpg', 'scene_size': (600, 399), 'condition_old': 'old', 'correct_key_old': 'left', 'object_encode': 'Objects_Dataset/basketball.jpg', 'object_size': (282, 300), 'condition_encode': 'Congruent', 'lure': 'Objects_Dataset/whistle.jpg', 'lure_size': (200, 151), 'target_pos': (300, -200), 'lure_pos': (300, 200), 'correct_key_AFC': 'down', 'jitter_ITI': 2.15}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
    Routine blank
    Routine Encode
  LoopTerminator trial_encode
  Routine Pause_1
  Routine Go_Nogo_task
  Routine Cog_Oral
  Routine Retomar
  Routine Explanation_Recall
  Routine Explain_Old_New
  LoopInitiator trial_ex_old loopType="TrialHandler"
    conditionsFile = Exemplo_old.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 1, 'ex_scene_old_new': 'Scenes_Dataset/movie_theater_A.jpg', 'scene_size': (600, 364), 'condition_encode': ' old', 'jitter_ITI': 2},
      {'Index': 2, 'ex_scene_old_new': 'Scenes_Dataset/museum_A.jpg', 'scene_size': (600, 337), 'condition_encode': 'old', 'jitter_ITI': 3},
      {'Index': 3, 'ex_scene_old_new': 'Scenes_Dataset/building_entrance_A.jpg', 'scene_size': (600, 400), 'condition_encode': 'new', 'jitter_ITI': 2.5},
      {'Index': 4, 'ex_scene_old_new': 'Scenes_Dataset/boat_interior_A.jpg', 'scene_size': (600, 400), 'condition_encode': 'new', 'jitter_ITI': 3.25}]
    Routine blank
    Routine Exemplo_old
  LoopTerminator trial_ex_old
  Routine Start_Recall
  LoopInitiator trial_item loopType="TrialHandler"
    Selected rows = 0:20
    conditionsFile = encode_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine Old_New_Task
  LoopTerminator trial_item
  Routine End_Old_New
  Routine Explain_2AFC
  LoopInitiator trial_ex_2AFC loopType="TrialHandler"
    conditionsFile = Exemplo_encode.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Index': 1, 'scene_encode': 'Scenes_Dataset/movie_theater_A.jpg', 'scene_size': (600, 364), 'object_encode': 'Objects_Dataset/movie_reels.jpg', 'object_size': (350, 268), 'target_pos': (250, -200), 'condition_encode': 'congruent', 'lure': 'Objects_Dataset/3d_glasses.jpg', 'lure_size': (300, 300), 'lure_pos': (250, 200), 'ex_new': 'Scenes_Dataset/building_entrance_A.jpg', 'new_scene_size': (600, 400), 'jitter_ITI': 2},
      {'Index': 2, 'scene_encode': 'Scenes_Dataset/museum_A.jpg', 'scene_size': (600, 337), 'object_encode': 'Objects_Dataset/picnic_towel.jpg', 'object_size': (300, 300), 'target_pos': (250, 200), 'condition_encode': 'incongruent', 'lure': 'Objects_Dataset/fluorescent_bracelets.jpg', 'lure_size': (300, 300), 'lure_pos': (250, -200), 'ex_new': 'Scenes_Dataset/boat_interior_A.jpg', 'new_scene_size': (600, 400), 'jitter_ITI': 2.5}]
    Routine blank
    Routine Exemplo_2AFC
  LoopTerminator trial_ex_2AFC
  Routine Start_Recall
  LoopInitiator trial_asso loopType="TrialHandler"
    Selected rows = 0:20
    conditionsFile = encode_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine trial_2AFC
  LoopTerminator trial_asso
  Routine end
  Routine EEG_close
